# Generated by Configurator on Tue May 31 14:37:39 CEST 2016

# Reset
Property,Core,Initialize,0

# Devices
Device,COM11,SerialManager,COM11
Device,Andor Zyla 4.2,AndorSDK3,Andor sCMOS Camera
Device,Coherent Obis 405,CoherentOBIS,CoherentObis

# Pre-init settings for devices
Property,Coherent Obis 405,Port,COM11

# Pre-init settings for COM ports
Property,COM11,AnswerTimeout,500.0000
Property,COM11,BaudRate,57600
Property,COM11,DelayBetweenCharsMs,0.0000
Property,COM11,Handshaking,Off
Property,COM11,Parity,None
Property,COM11,StopBits,1
Property,COM11,Verbose,1

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,Andor Zyla 4.2
Property,Core,AutoShutter,0

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

